OpenViBE-Scenario

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Data=#0.Signal stream -> Signal display
  Display Mode = Scroll
  Auto vertical scale = Global
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Signal stream -> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 12.5
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 0.5
Data=#2 -> Signal display
  Display Mode = Scroll
  Auto vertical scale = Global
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#2 -> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Analog VRPN Server
  Peripheral name = beta_power
#0.Signal stream -> Temporal filter => #9
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 7.5
  High cut frequency (Hz) = 12
  Pass band ripple (dB) = 0.5
Data=#9 -> Signal display
  Display Mode = Scroll
  Auto vertical scale = Global
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#9 -> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Analog VRPN Server
  Peripheral name = alpha_power
#0.Signal stream -> Time based epoching => #16
  Epoch 1 duration (in sec) = 10
  Epoch 1 intervals (in sec) = 1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Analog VRPN Server
  Peripheral name = signal_power
#16 -> Spectral analysis (FFT) => #21
  Spectral components = Amplitude
#21.Amplitude -> Power spectrum display
  Minimum frequency to display = 0
  Maximum frequency to display = 40
